CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Paired GFP and brightfield TIFF files from cell_count_input.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['Pair GFP and brightfield images by their standardized sort order.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_g.tif")
    Name to assign these images:GFPColor
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_w.tif")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Extract GFP green channel.']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
    Select the input image:GFPColor
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:GFP
    Convert blue to gray?:No
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
Crop:[module_num:6|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notes:['Remove scale bar region from GFP.']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
    Select the input image:GFP
    Name the output image:GFPCrop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,1780
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    Remove empty rows and columns?:All
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
Crop:[module_num:7|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notes:['Apply the same crop to brightfield.']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
    Select the input image:Brightfield
    Name the output image:BrightfieldCrop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,1780
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    Remove empty rows and columns?:All
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
ImageMath:[module_num:8|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notes:['Invert brightfield so dark cell centers become bright features.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BrightfieldInverted
    Image or measurement?:Image
    Select the first image:BrightfieldCrop
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Smooth:[module_num:9|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notes:['Suppress fine brightfield texture before center detection.']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
    Select the input image:BrightfieldInverted
    Name the output image:BrightfieldSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:8.0
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
EnhanceOrSuppressFeatures:[module_num:10|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notes:['Enhance approximately cell-sized bright centers.']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
    Select the input image:BrightfieldSmooth
    Name the output image:BrightfieldCenters
    Select the operation:Enhance
    Feature size:22
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:11|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notes:['Estimate total cells from enhanced brightfield centers.']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
    Select the input image:BrightfieldCenters
    Name the primary objects to be identified:TotalCells
    Typical diameter of objects, in pixel units (Min,Max):12,55
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:12.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:12|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notes:['Estimate GFP-positive cells with the same fixed fluorescence threshold.']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
    Select the input image:GFPCrop
    Name the primary objects to be identified:PositiveCells
    Typical diameter of objects, in pixel units (Min,Max):10,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:12.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.0
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    Manual threshold:0.3607843137
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
CalculateMath:[module_num:13|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notes:['Positive cell count divided by total cell count, expressed as percent.']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
    Name the output measurement:EstimatedTransfectionByCellCountPercent
    Operation:Divide
    Select the first operand measurement type:Image
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    Select the first operand measurement:Count_PositiveCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:Count_TotalCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:Yes
    Enter the lower bound:0.0
    Constrain the result to an upper bound?:No
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
Threshold:[module_num:14|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notes:['Binary GFP mask for the area metric.']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
    Select the input image:GFPCrop
    Name the output image:GFPPositive
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.3607843137
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
MeasureImageAreaOccupied:[module_num:15|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notes:['GFP-positive area fraction.']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
    Measure the area occupied by:Binary Image
    Select binary images to measure:GFPPositive
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
ExportToSpreadsheet:[module_num:16|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notes:['Export image-level counts and ratios.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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